OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x84009d7c = Computes the asymmetry index of a given EEG signal. Default parameters correspond to frontal alpha asymmetry.
0x8c1fc55b = 1.0
0x9f5c4075 = Asymmetry Index
0xf6b2e3fa = Signal processing/Filtering
0xf8034a49 = Inria
Settings
  Left Channel List = F3
  Right Channel List = F4
  Output channels names = Frontal alpha asymetry
  Filter Order = 4
  Filter Low Cut Frequency (Hz) = 8
  Filter High Cut Frequency (Hz) = 13
  Epoching duration (s) = 1
  Epoching intervals (s) = 0.5
Input Input Signal -> #0
Output Asymmetry Index <- #7

Channel Selector "Left Channel List;Right Channel List" => #0
  Channel List = $var{Left Channel List};$var{Right Channel List}
  Action = Select
  Channel Matching Method = Name
-> Temporal filter "Select Frequency Band"
  Filter Type = Band Pass
  Filter Order = $var{Filter Order}
  Low Cut-off Frequency (Hz) = $var{Filter Low Cut Frequency (Hz)}
  High Cut-off Frequency (Hz) = $var{Filter High Cut Frequency (Hz)}
-> Time based epoching
  Epoch duration (in sec) = $var{Epoching duration (s)}
  Epoch intervals (in sec) = $var{Epoching intervals (s)}
-> Simple DSP "Power" => #3
  Equation = x*x
-> Channel Selector "Left Channel List" => #4
  Channel List = $var{Left Channel List}
  Action = Select
  Channel Matching Method = Name
#3 -> Channel Selector "Right Channel List" => #5
  Channel List = $var{Right Channel List}
  Action = Select
  Channel Matching Method = Name
Input - A=#4, Input - B=#5 -> Simple DSP "Log(Right Channel List) - Log(Left Channel List)"
  Equation = log(b)-log(a)
-> Channel Rename => #7
  New channel names = $var{Output channels names}
