OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Add Timeout If no train stimulation comes
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts path = folder to the scripts and config files (normally don't need to change that that if you keep the hierarchy)
  Training EEG File = link to the file for training (previous concatenate file)
  File Suffix = Suffix for script files
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  Training EEG File = lien vers le fichier d'entrainement (le fichier concaténé précédemment)
  File Suffix = suffixe  pour les fichiers de config
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Training EEG File = ${Player_ScenarioDirectory}/signals/training.ov
  XP Name = XP
  Subject ID = C1
  Session = 1
  File Suffix = $var{XP Name}_$var{Subject ID}_S$var{Session}
  Trial Duration = 4
  Trial Offset = 0.5
  Epoch Duration = 1
  Epoch Offset = 0.0625
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right

Generic stream reader => #0
  Filename = $var{Training EEG File}
#0.Output stream 2 -> Timeout => #1
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#1 -> Stimulation multiplexer
-> Identity => #3
-> Identity => #4
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal Filter => #6
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Low Cut-off Frequency 2 (Hz) = 8
  High Cut-off Frequency 2 (Hz) = 12
  Low Cut-off Frequency 3 (Hz) = 12
  High Cut-off Frequency 3 (Hz) = 16
  Low Cut-off Frequency 4 (Hz) = 16
  High Cut-off Frequency 4 (Hz) = 20
  Low Cut-off Frequency 5 (Hz) = 20
  High Cut-off Frequency 5 (Hz) = 24
  Low Cut-off Frequency 6 (Hz) = 24
  High Cut-off Frequency 6 (Hz) = 28
  Low Cut-off Frequency 7 (Hz) = 28
  High Cut-off Frequency 7 (Hz) = 32
  Low Cut-off Frequency 8 (Hz) = 32
  High Cut-off Frequency 8 (Hz) = 36
  Low Cut-off Frequency 9 (Hz) = 36
  High Cut-off Frequency 9 (Hz) = 40
#6.Output signal -> Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-4_8-$var{File Suffix}.xml
#6.Output signal 2 -> Spatial Filter => #8
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-8_12-$var{File Suffix}.xml
#6.Output signal 3 -> Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-12_16-$var{File Suffix}.xml
#6.Output signal 4 -> Spatial Filter => #10
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-16_20-$var{File Suffix}.xml
#6.Output signal 5 -> Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-20_24-$var{File Suffix}.xml
#6.Output signal 6 -> Spatial Filter => #12
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-24_28-$var{File Suffix}.xml
#6.Output signal 7 -> Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-28_32-$var{File Suffix}.xml
#6.Output signal 8 -> Spatial Filter => #14
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-32_36-$var{File Suffix}.xml
#6.Output signal 9 -> Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-36_40-$var{File Suffix}.xml
Input 1=#7, Input 2=#8, Input 3=#9, Input 4=#10, Input 5=#11, Input 6=#12, Input 7=#13, Input 8=#14, Input 9=#15 -> Signal Merger => #16
Input signal=#16, Input stimulations=#3 -> Stimulation based epoching "Trials C1"
  Epoch duration (in sec) = $var{Trial Duration}
  Epoch offset (in sec) = $var{Trial Offset}
  Stimulation to epoch from = $var{Class 1}
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Signal Power Log
-> Feature aggregator
-> Features Selector => #21
  Features List = :
  0x8d21ff41 = $var{Scripts Path}/features-selected-$var{File Suffix}.xml
Input signal=#16, Input stimulations=#3 -> Stimulation based epoching "Trials C2"
  Epoch duration (in sec) = $var{Trial Duration}
  Epoch offset (in sec) = $var{Trial Offset}
  Stimulation to epoch from = $var{Class 2}
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Signal Power Log
-> Feature aggregator
-> Features Selector => #26
  Features List = :
  0x8d21ff41 = $var{Scripts Path}/features-selected-$var{File Suffix}.xml
Stimulations=#4, Features for class 1=#21, Features for class 2=#26 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = $var{Scripts Path}/classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = $var{Class 1}
  Class 2 label = $var{Class 2}
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 5
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
