<OpenViBE-Scenario>
	<FormatVersion>2</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>3.2.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x00002134, 0x00001d37)</Identifier>
			<Name>Threshold Crossing Detector</Name>
			<AlgorithmClassIdentifier>(0x04fa78cd, 0xafe45de7)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x544a003e, 0x6dcba5f6)</TypeIdentifier>
					<Name>Signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Generated stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Threshold</Name>
					<DefaultValue>0</DefaultValue>
					<Value>-0.5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross over threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross under threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_01</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Channel Index</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>400</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>576</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xeb97db60, 0x15906899)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002a2d, 0x00002eff)</Identifier>
			<Name>Time signal</Name>
			<AlgorithmClassIdentifier>(0x28a5e7ff, 0x530095de)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Generated signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Sampling frequency</Name>
					<DefaultValue>512</DefaultValue>
					<Value>512</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Generated epoch sample count</Name>
					<DefaultValue>32</DefaultValue>
					<Value>32</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>192</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>768</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x9e5ca01e, 0x30a4d8c3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000054fa, 0x00006eca)</Identifier>
			<Name>Threshold Crossing Detector</Name>
			<AlgorithmClassIdentifier>(0x04fa78cd, 0xafe45de7)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x544a003e, 0x6dcba5f6)</TypeIdentifier>
					<Name>Signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Generated stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Threshold</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0.5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross over threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_02</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross under threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_01</DefaultValue>
					<Value>OVTK_StimulationId_Label_02</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Channel Index</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>400</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>960</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xeb97db60, 0x15906899)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005e8a, 0x00004108)</Identifier>
			<Name>Signal display</Name>
			<AlgorithmClassIdentifier>(0x0055be5f, 0x087bdd12)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Data</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel Units</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x5de046a6, 0x086340aa)</TypeIdentifier>
					<Name>Display Mode</Name>
					<DefaultValue>Scan</DefaultValue>
					<Value>Scan</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x33a30739, 0x00d5299b)</TypeIdentifier>
					<Name>Auto vertical scale</Name>
					<DefaultValue>Per channel</DefaultValue>
					<Value>None</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Scale refresh interval (secs)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Scale</Name>
					<DefaultValue>100</DefaultValue>
					<Value>2</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Offset</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time Scale</Name>
					<DefaultValue>10</DefaultValue>
					<Value>16</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Bottom ruler</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Left ruler</Name>
					<DefaultValue>false</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Multiview</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>608</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92c056a7, 0x2dc71aff)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>9</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000641a, 0x00002056)</Identifier>
			<Name>Simple DSP</Name>
			<AlgorithmClassIdentifier>(0x00e26fa1, 0x1dbab1b2)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input - A</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
					<Name>Equation</Name>
					<DefaultValue>x</DefaultValue>
					<Value>sin(x)</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>272</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>768</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x21889dc4, 0x1126497e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00006c77, 0x000010c9)</Identifier>
			<Name>Threshold Crossing Detector</Name>
			<AlgorithmClassIdentifier>(0x04fa78cd, 0xafe45de7)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x544a003e, 0x6dcba5f6)</TypeIdentifier>
					<Name>Signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Generated stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Threshold</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross over threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Label_01</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Cross under threshold</Name>
					<DefaultValue>OVTK_StimulationId_Label_01</DefaultValue>
					<Value>OVTK_StimulationId_Label_01</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Channel Index</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>400</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>768</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xeb97db60, 0x15906899)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000070e5, 0x00000829)</Identifier>
			<Name>Stimulation multiplexer</Name>
			<AlgorithmClassIdentifier>(0x07db4efa, 0x472b0938)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 2</Name>
				</Input>
				<Input>
					<Identifier>(0x96bafd02, 0x49e605cb)</Identifier>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 3</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Multiplexed stimulations</Name>
				</Output>
			</Outputs>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>512</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>768</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xe7af82cd, 0x14edb4d4)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x00000664, 0x00002f8b)</Identifier>
			<Source>
				<BoxIdentifier>(0x000070e5, 0x00000829)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005e8a, 0x00004108)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00000c1b, 0x000048e8)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000641a, 0x00002056)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00006c77, 0x000010c9)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00000d92, 0x00006d6d)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002a2d, 0x00002eff)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000641a, 0x00002056)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00002bb3, 0x00001354)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006c77, 0x000010c9)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000070e5, 0x00000829)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00002e51, 0x00003a81)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002134, 0x00001d37)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000070e5, 0x00000829)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00004b6b, 0x000020f7)</Identifier>
			<Source>
				<BoxIdentifier>(0x000054fa, 0x00006eca)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000070e5, 0x00000829)</BoxIdentifier>
				<BoxInputIdentifier>(0x96bafd02, 0x49e605cb)</BoxInputIdentifier>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005325, 0x00005a05)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000641a, 0x00002056)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002134, 0x00001d37)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005bd4, 0x000053cd)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000641a, 0x00002056)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000054fa, 0x00006eca)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006615, 0x00005aca)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000641a, 0x00002056)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005e8a, 0x00004108)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x000000fa, 0x00006d32)</Identifier>
			<Text>Threshold = 0</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>816</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>368</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00002048, 0x000036c1)</Identifier>
			<Text>4. The signal and the stumilations are displayed.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1232</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>608</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x000020b5, 0x00006489)</Identifier>
			<Text>Threshold = -0.5</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>368</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00002749, 0x000008ae)</Identifier>
			<Text>1. We use a &lt;b&gt;Time signal&lt;/b&gt; combined with a &lt;b&gt;Simple DSP&lt;/b&gt; to generate a sine wave.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1312</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>256</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00003d26, 0x00000802)</Identifier>
			<Text>2. The &lt;b&gt;threshold crossing detectors&lt;/b&gt; are set to detect when the signal goes over/under some specific threshold values. 
(Here, -0.5, 0 and 0.5).</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1424</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>400</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00004979, 0x00002fbc)</Identifier>
			<Text>Threshold = 0.5</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1008</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>368</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00004bc6, 0x0000135f)</Identifier>
			<Text>3. The stimulation multiplexer combines the 3 stimulations streams into 1.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1296</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>512</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x000063b7, 0x00005d9b)</Identifier>
			<Text>You can browse each box' documentation by selecting the box and pressing &lt;b&gt;F1&lt;/b&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>672</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>96</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x000062ac, 0x00003721)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"height":320,"identifier":"(0x0000041e, 0x000069b5)","name":"Default window","parentIdentifier":"(0xffffffff, 0xffffffff)","type":1,"width":480},{"boxIdentifier":"(0x00005e8a, 0x00004108)","childCount":0,"identifier":"(0x00007cf3, 0x00006d7d)","parentIdentifier":"(0xffffffff, 0xffffffff)","type":3},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"identifier":"(0x00004c5d, 0x000021d4)","index":0,"name":"Default tab","parentIdentifier":"(0x0000041e, 0x000069b5)","type":2},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":0,"identifier":"(0x0000420e, 0x000074bb)","index":0,"name":"Empty","parentIdentifier":"(0x00004c5d, 0x000021d4)","type":0}]</Data>
		</Entry>
	</Metadata>
</OpenViBE-Scenario>